PsychoPy2experiment version="2022.1.4"
Settings
  Data filename = u'data/%s_IMG_%s' % (expInfo['participant'], expInfo['session'])
  Experiment info = {'participant': '番号イニシャル', 'session': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = main
  keyboardBackend = ioHub
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Routines
  Routine fixation_cross
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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  Routine MindWanderingProbe
    ImageComponent probe
      image = probe.png
      startVal [time (s)] = 0.0
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    KeyboardComponent probe_resp
      allowedKeys = '4', '6', 'num_4', 'num_6'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine image_training
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        import os  # For file path operations
        import random  # For random operations

        # Path to the folder containing your images
        image_folder = './Training'

        # List all image files in the folder
        image_files = [f for f in os.listdir(image_folder) if os.path.isfile(os.path.join(image_folder, f))]

        # Shuffle the list to randomize the order of images
        random.shuffle(image_files)

        # Initialize a variable to keep track of the current image index
        image_index = 0
      Begin Routine:
        if image_index < len(image_files):  # Check if there are still images left to display
            # Set the next image file
            image_file = os.path.join(image_folder, image_files[image_index])

            # Randomly select a duration between 45 and 75 seconds
            duration = random.randint(45, 75)
            thisExp.addData('image.rt', duration)
            image_index += 1

        else:
            # If all images have been displayed, end the experiment
            continueRoutine = False
            core.quit()
      Each Frame:
        # Update the image component's file path
        thisExp.addData('imagepath', image_file)  # Optionally log the image path
        image.setImage(image_file)  # 'image' should be replaced with the actual name of your Image component

        # Check if the duration has elapsed to end the routine
        if t >= duration:
            continueRoutine = False  # End the routine
    ImageComponent image
      startVal [time (s)] = 0.0
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  Routine image_test
    ImageComponent test
      image [set every frame] = $imageName
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = '4', '6', 'num_4', 'num_6'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine InitScreen
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine StartInstruction
    ImageComponent prep
      image = prep.png
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine img1
    ImageComponent image_2
      image = C:/Users/Kumada Lab/Downloads/wallpaperflare.com_wallpaper (10) (1).jpg
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine img2
    ImageComponent image_3
      image = C:/Users/Kumada Lab/Downloads/wallpaperflare.com_wallpaper (11) (1).jpg
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine ins1_fixed
    ImageComponent image_4
      image = Instruction_IMG(1).png
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent hide_cursor
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
  Routine ins1
    ImageComponent image_5
      image = Instruction_IMG(1).png
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ins2_fixed
    ImageComponent image_6
      image = Instruction_IMG(2).png
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine ins2
    ImageComponent image_7
      image = Instruction_IMG(2).png
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ins3_fixed
    ImageComponent image_10
      image = Instruction_IMG(3).png
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine ins3
    ImageComponent image_11
      image = Instruction_IMG(3).png
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine StartInstruction_fixed
    ImageComponent image_12
      image = prep.png
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine ins10
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  Routine ins10_fixed
    ImageComponent image_9
      image = Instruction_IMG(10).png
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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Flow
  Routine ins1_fixed
  Routine ins1
  Routine ins2_fixed
  Routine ins2
  Routine ins3_fixed
  Routine ins3
  Routine StartInstruction_fixed
  Routine StartInstruction
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 24
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    Routine fixation_cross
    Routine image_training
    Routine MindWanderingProbe
  LoopTerminator trials
  Routine ins10_fixed
  Routine ins10
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = image_test.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('imageName', 'Test/1.png'), ('correctResponse', 4)]),
      OrderedDict([('imageName', 'Test/2.png'), ('correctResponse', 6)]),
      OrderedDict([('imageName', 'Test/3.png'), ('correctResponse', 4)]),
      OrderedDict([('imageName', 'Test/4.png'), ('correctResponse', 6)]),
      OrderedDict([('imageName', 'Test/5.png'), ('correctResponse', 4)]),
      OrderedDict([('imageName', 'Test/6.png'), ('correctResponse', 6)]),
      OrderedDict([('imageName', 'Test/7.png'), ('correctResponse', 4)]),
      OrderedDict([('imageName', 'Test/8.png'), ('correctResponse', 6)]),
      OrderedDict([('imageName', 'Test/9.png'), ('correctResponse', 4)]),
      OrderedDict([('imageName', 'Test/10.png'), ('correctResponse', 6)]),
      OrderedDict([('imageName', 'Test/11.png'), ('correctResponse', 4)]),
      OrderedDict([('imageName', 'Test/12.png'), ('correctResponse', 6)]),
      OrderedDict([('imageName', 'Test/13.png'), ('correctResponse', 4)]),
      OrderedDict([('imageName', 'Test/14.png'), ('correctResponse', 6)]),
      OrderedDict([('imageName', 'Test/15.png'), ('correctResponse', 4)]),
      OrderedDict([('imageName', 'Test/16.png'), ('correctResponse', 6)]),
      OrderedDict([('imageName', 'Test/17.png'), ('correctResponse', 4)]),
      OrderedDict([('imageName', 'Test/18.png'), ('correctResponse', 6)]),
      OrderedDict([('imageName', 'Test/19.png'), ('correctResponse', 4)]),
      OrderedDict([('imageName', 'Test/20.png'), ('correctResponse', 6)]),
      OrderedDict([('imageName', 'Test/21.png'), ('correctResponse', 4)]),
      OrderedDict([('imageName', 'Test/22.png'), ('correctResponse', 6)])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
    Routine image_test
    Routine blank
  LoopTerminator trials_2
