PsychoPy2experiment version="2022.1.4"
Settings
  Data filename = u'data/%s_SART_%s' % (expInfo['participant'], expInfo['session'])
  Experiment info = {'participant': '番号イニシャル', 'session': 'セッション'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = main
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        # Begin Experiment
        from random import shuffle
        trial_num = 100
        prob = 0.8
        stimuli = []

        for _ in range(int(trial_num * prob)):
            stimuli.append("OOOOO")
        for _ in range(int(trial_num - trial_num * prob)):
            stimuli.append("XXXXX")

        shuffle(stimuli)
      Begin Routine:
        # Begin Routine
        stimulus = stimuli.pop()  # Get a stimulus

        # Save the correctness of the response to the data file
        thisExp.addData('stimulus', stimulus)

        correct_ans = None
        if stimulus == "OOOOO":
            correct_ans = 'space'
    TextComponent text_2
      letterHeight = 0.10
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $stimulus
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    KeyboardComponent stimulus_resp
      allowedKeys = 'space'
      correctAns = $correct_ans
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      store = first key
      storeCorrect = True
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  Routine fixation_cross
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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  Routine MindWanderingProbe
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        from random import randint
        currentTrial = 0

        is_ok = False
        random_sequence = []

        while not is_ok:
            e1 = randint(-5, 5)
            e2 = randint(-5 + e1, 5 + e1)
            e4 = randint(-5, 5)
            e3 = randint(-5 + e4, 5 + e4)
            if -5 + e2 <= e3 <= 5 + e2:
                is_ok = True
                random_sequence = [20+e1, 40+e2, 60+e3, 80+e4, 100]
                break

        # Assuming 'trials' is the name of your loop in Builder
        thisExp.addData('randomSequence', random_sequence)
      Begin Routine:
        currentTrial += 1
        if currentTrial not in random_sequence:
            continueRoutine = False
    ImageComponent probe
      image = probe.png
      startVal [time (s)] = 0.0
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    KeyboardComponent prob_resp
      allowedKeys = '4', '6', 'num_4', 'num_6'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test
    TextComponent text_7
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
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      text:
        あなたは先ほどの状態を教えてください？
    TextComponent text_8
      font = Meiryo
      letterHeight = 0.05
      pos = (-0.3,0)
      startVal [time (s)] = 0.0
      text = Zone Out
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    TextComponent text_9
      font = Meiryo
      letterHeight = 0.05
      pos = (0.3,0)
      startVal [time (s)] = 0.0
      text = Focused
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  Routine routine_1
  Routine test_2
    ImageComponent image
      image = C:/Users/Kumada Lab/Downloads/probe.png
      startVal [time (s)] = 0.0
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  Routine img
    ImageComponent image_2
      image = C:/Users/Kumada Lab/Downloads/probe.png
      startVal [time (s)] = 0.0
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  Routine StartInstruction
    ImageComponent image_3
      image = prep.png
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine grey
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine ins1
    ImageComponent image_4
      image = Instruction_SART(1).png
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ins2
    ImageComponent image_5
      image = Instruction_SART(2).png
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ins3
    ImageComponent image_6
      image = Instruction_SART(3).png
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ins1_fixed
    ImageComponent image_7
      image = Instruction_SART(1).png
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent hide_cursor
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
  Routine ins2_fixed
    ImageComponent image_8
      image = Instruction_SART(2).png
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine ins3_fixed
    ImageComponent image_9
      image = Instruction_SART(3).png
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine StartInstruction_fixed
    ImageComponent image_10
      image = prep.png
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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Flow
  Routine ins1_fixed
  Routine ins1
  Routine ins2_fixed
  Routine ins2
  Routine ins3_fixed
  Routine ins3
  Routine StartInstruction_fixed
  Routine StartInstruction
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine fixation_cross
    Routine trial
    Routine MindWanderingProbe
  LoopTerminator trials
